<Synthesis>
    <Hardware>
        <Reactor id="reactor2" />
    </Hardware>

    <Reagents>
        <Reagent id="ammonia" />
        <Reagent id="koh" />
        <Reagent id="naoh" />
        <Reagent id="ethanol" />
    </Reagents>

    <Procedure>

        <MakeSolution
            solute="koh naoh"
            solvent="ethanol"
            solute_mass="5g 10g"
            solvent_volume="30mL"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15ml"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15mL"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15l"
            vessel="reactor2" />
        <Add
            reagent="ammonia"
            volume="15cl"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15cL"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15.678L"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15.5dl"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15dL"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            volume="15cc"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            mass="15g"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            mass="15mg"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            mass="15ug"
            vessel="reactor2" />

        <Add
            reagent="ammonia"
            mass="15kg"
            vessel="reactor2" />

    </Procedure>

</Synthesis>