<Synthesis filter_dead_volume_method="solvent">
  <Hardware>
      <Component
        id="filter2"
        type="filter" />
  </Hardware>
 
  <Reagents>
    <Reagent
      id="acetonitrile" />
    <Reagent
      id="substrateS3" />
    <Reagent
      id="KF" />
    <Reagent
      id="KBF4" />
    <Reagent
      id="ether" />
    <Reagent
      id="DCM" />
  </Reagents>

  <Procedure>
    <Dry
      filter_vessel="filter2"
      temp="40"
      time="2h" />
  	<Add
  	  reagent="acetonitrile"
  	  volume="100mL"
  	  vessel="filter2"
  	  stir="True"
      stir_rpm="250"
      port="top" />
    <Dissolve
      vessel="rotavap"
      solvent="acetonitrile"
      volume="200ml"
      stir_rpm="250"
      time="10min" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="filter2"
      volume="all"
      from_port="evaporate" />
    <CleanVessel
      vessel="rotavap"
      solvent="acetonitrile"
      volume="25ml"
      repeat="3" />
    <HeatChill
      vessel="filter2"
      temp="80"
      time="16h"
      stir="True"
      stir_rpm="500" />
    <HeatChillReturnToRT
      vessel="filter2"
      stir="True" />
    <!-- <FilterThrough
      from_vessel="filter2"
      to_vessel="rotavap"
      through_cartridge="cartridge_celite"
      eluting_solvent="DCM"
      eluting_volume="25ml"
      eluting_repeats="3" /> -->
    <Rotavap
      rotavap_name="rotavap"
      temp="40"
      pressure="750"
      time="1h" />
    <Dissolve
      vessel="rotavap"
      solvent="DCM"
      volume="200ml"
      stir_rpm="250"
      time="10min" />
    <FilterThrough
      from_vessel="rotavap"
      to_vessel="buffer_flask"
      through_cartridge="cartridge_celite"
      eluting_solvent="DCM"
      eluting_volume="25ml"
      eluting_repeats="3" />
    <CleanVessel
      vessel="rotavap"
      solvent="DCM"
      volume="25ml"
      repeat="3" />
    <Transfer
      from_vessel="buffer_flask"
      to_vessel="rotavap"
      volume="all" />
    <WashSolid
      vessel="rotavap"
      stir_rpm="250"
      stir_time="10min"
      solvent="ether"
      volume="15ml"
      repeat="3" />
    <Dry
      filter_vessel="rotavap"
      temp="23"
      time="1h" />
      <!-- pressure="100mbar"
      stir="True"
      stir_rpm="50" /> -->
  </Procedure>
</Synthesis>
